OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

fear => #0
  Filename = C:/Users/Bill/Desktop/hackaton-master/hackaton-master/record-[2016.12.02-22.32.22].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Feature aggregator => #1
happy => #2
  Filename =
  Samples per buffer = 32
  Subtract physical minimum = false
#2.EEG stream -> Feature aggregator => #3
sad => #4
  Filename =
  Samples per buffer = 32
  Subtract physical minimum = false
#4.EEG stream -> Feature aggregator => #5
neutral => #6
  Filename =
  Samples per buffer = 32
  Subtract physical minimum = false
#6.EEG stream -> Feature aggregator => #7
Timeout => #8
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
Stimulations=#8, Features for class 1=#1, Features for class 2=#3, Features for class 3=#5, Features for class 4=#7 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Path_UserData}/my-classifier.xml
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
  Class 4 label = OVTK_StimulationId_Label_04
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Pause

0xc73e83ec Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
