OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Data collection patch
  we offer to collect GDF-file with each data class independently
Comment
  try to use epoch averaging
  instead signal averaging
Comment
  channel indices depends on device type
  (this patch is tuned for Muse headband)
Comment
  python script to normalize value [-1,1]
Comment
  feature aggregation
Comment
  try to use CSV-file writer instead of GDF

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 0.5
  High cut frequency (Hz) = 70
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 10
  Epoch 1 intervals (in sec) = 0.5
-> Signal average => #4
-> Spectral analysis (FFT) => #5
  Spectral components = Amplitude
#5.Amplitude -> Frequency Band Selector
  Frequencies to select = 7:13
-> Simple DSP "inverse alpha power" => #7
  Equation = 1/x
#4 -> Channel Selector "FP1 (2)"
  Channel List = 2
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #9
  Spectral components = Amplitude
#9.Amplitude -> alpha 1 => #10
  Frequencies to select = 7:13
#4 -> Channel Selector "FP2 (3)"
  Channel List = 3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #12
  Spectral components = Amplitude
#12.Amplitude -> alpha 2 => #13
  Frequencies to select = 7:13
A=#10, B=#13 -> Simple DSP "alpha1-alpha2" => #14
  Equation = A-B
A=#10, B=#13 -> Simple DSP "alpha1+alpha2" => #15
  Equation = A+B
A=#14, B=#15 -> Simple DSP "asymmetry coefficient" => #16
  Equation = A/B
Input 1=#7, Input 2=#16 -> Signal Merger
-> Feature aggregator
-> Simple DSP => #19
  Equation = x
Signal=#19 -> GDF file writer
  Filename = C:/Users/Bill/Desktop/hackaton-master/hackaton-master/record-[$core{date}-$core{time}].gdf

Clock stimulator => #21
  Interstimulation interval (in sec) = 3.0
  Stimulation = OVTK_GDF_100_Watt
Clock stimulator => #22
  Interstimulation interval (in sec) = 5.0
  Stimulation = OVTK_StimulationId_VisualStimulationStop
Input stimulations 1=#21, Input stimulations 2=#22 -> Stimulation multiplexer
-> 0xc67a01dc Display cue image
  Display images in full screen = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/Bill/Desktop/1_1.jpg
  Stimulation 1 = OVTK_GDF_100_Watt

0xc73e83ec Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4

0xc73e83ec CSV File Writer
  Filename = record-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
